PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/' + '%s_%s' %(expInfo['participant'], expInfo['date']) + '_Urn'
  Monitor = testMonitor
  color = white
  Window size (pixels) = [1280, 1024]
  Full-screen window = False
  Experiment info = {u'participant': u'999'}
  Save csv file = True
  expName = SocialUrn
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine compface_i
    CodeComponent code_i6
      Begin Experiment:
        conditionConf=""
        conditionUnconf=""
      Begin Routine:
        if compplayer == 1:
           compFace = 'faces/04uc.jpg'
        if compplayer == 2:
           compFace = 'faces/30uc.jpg'
        if compplayer == 3:
           compFace = 'faces/11uc.jpg'
        if compplayer == 4:
           compFace = 'faces/06uc.jpg'

        showCompChoice="red_choice_s.png"

        ycomphandorig  = ycompHand
      End Routine:
        ComputerFace_i6.setAutoDraw(True)
        CompBeanChoice_i6.setAutoDraw(True)
      Each Frame:
        if ycompHand > -1:
            ycompHand = ycompHand - .1
    TextComponent ins_i6
      wrapWidth = 0.6
      color = black
      pos = [0.4, -.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text [set every repeat]:
        'Based on ' + $pronoun + ' sample, '+ $pronoun2 + ' guesses what is inside the bucket and expresses '
        + $pronoun+' confidence in that guess.'
    ImageComponent ComputerFace_i6
      pos = [-0.25, -0.25]
      startVal [time (s)] = 0
      image [set every repeat] = $compFace
      size = [0.3, 0.5]
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    ImageComponent bucket_i6
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    ImageComponent CompBeanChoice_i6
      pos = [-0.25, -0.6]
      startVal [time (s)] = 0.0
      image [set every repeat] = $showCompChoice
      size [set every repeat] = [0.2, 0.25]
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    ImageComponent compHand_i6
      pos [set every frame] = [xcompHand,ycompHand]
      ori [set every frame] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $comphand
      size [set every repeat] = [handw, handh]
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    TextComponent press_i6
      color = black
      text = press key to continue
      pos = [0.5, -.85]
      startVal [time (s)] = 2
      letterHeight = 0.05
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine grab_i
    CodeComponent code_i4
      Begin Routine:
        ycReach= yReach
      Each Frame:
        if ycReach<1.2:
            ycReach=0.8+frameN/30
    ImageComponent ComputerGrab_i4
      pos [set every frame] = [xcReach,ycReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $compgrab
      size = [0.1*2, 0.5*2]
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    ImageComponent grab_subject_i4
      pos [set every frame] = [xsReach, ycReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $sgrab
      size = [0.1*2, 0.5*2]
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    ImageComponent bucket_i4
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent ins_i4
      wrapWidth = 1.2
      color = black
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        You and your virtual partner take different
        samples from the bucket.

        Your samples contain different beans.
    TextComponent press_i4
      color = black
      text [set every repeat] = press key to continue
      pos = [0, -.85]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    TextComponent bucketText_i4
      color = black
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        demo
        bucket
    KeyboardComponent key_resp_i4
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine feedback
    ImageComponent bucket_12
      stopVal [duration (s)] = 0.5
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket.png
      size = [0.6, 0.75]
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    TextComponent subText
      color = black
      stopVal [duration (s)] = 0.5
      pos = [0.3, -0.25]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        your
        grab
    ImageComponent LeftJellyS_2
      stopVal [duration (s)] = 0.5
      pos = [05, .5]
      startVal [condition] = chosen=="left"
      image [set every repeat] = $leftJellyv
      size [set every repeat] = [jwidth, jheight]
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    ImageComponent RightJellyS_2
      stopVal [duration (s)] = 0.5
      pos = [0.05, 0.5]
      startVal [condition] = chosen=="right"
      image [set every repeat] = $rightJellyv
      size [set every repeat] = [jwidth, jheight]
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  Routine SubChoose
    CodeComponent code_13
      Begin Routine:
        responseJelly=""
        chosen=""
        stopwatch.reset()
        responseRT=999
        time_SubChoose = stopwatch2.getTime()
      End Routine:
        keys = event.getKeys(['v', 'b'])
        keep = 0

        if jellyLocCondition==1:
            if  choiceButton.keys == 'v':
                keep = 1
                responseJelly="red"
                subChoice=1
                responseRT = stopwatch.getTime()
            elif choiceButton.keys == 'b':
                keep = 2
                responseJelly="blue"
                responseRT = stopwatch.getTime()
                subChoice=0
        else:
            if  choiceButton.keys == 'v':
                keep = 1
                responseJelly="blue"
                subChoice=0
                responseRT = stopwatch.getTime()
            elif choiceButton.keys == 'b':
                keep = 2
                responseJelly="red"
                responseRT = stopwatch.getTime()
                subChoice=1


        ComputerFace_i6.setAutoDraw(False)
        CompBeanChoice_i6.setAutoDraw(False)

        subHand_i7.setAutoDraw(False)
        sjelly1_2.setAutoDraw(False)
        sjelly2_2.setAutoDraw(False)
        sjelly3_2.setAutoDraw(False)
        sjelly4_2.setAutoDraw(False)
        sjelly5_2.setAutoDraw(False)
        sjelly6_2.setAutoDraw(False)
        sjelly7_2.setAutoDraw(False)
        sjelly8_2.setAutoDraw(False)
        comphandout.setAutoDraw(False)

        leftjelly_i5.setAutoDraw(False)
        rightjelly_i5.setAutoDraw(False)

        if responseJelly=="red":
            subresponse = 1
        else:
            subresponse = 0
        if subresponse == correct:
            subcorrect = 1
        else:
            subcorrect = 0
        if correct == 0.5:
            subcorrect = random.randint(0,1)
        social_urn_trials.addData('SubCorrect',subcorrect)
        correctResponses +=  subcorrect
        social_urn_trials.addData('correctResponses', correctResponses)

        #remove unnecessary elements
        leftJelly.setAutoDraw(False)
        rightJelly.setAutoDraw(False)
        ComputerFace.setAutoDraw(False)
        CompBeanChoice.setAutoDraw(False)
        compHandf.setAutoDraw(False)
        subHand.setAutoDraw(False)
        sjelly1.setAutoDraw(False)
        sjelly2.setAutoDraw(False)
        sjelly3.setAutoDraw(False)
        sjelly4.setAutoDraw(False)
        sjelly5.setAutoDraw(False)
        sjelly6.setAutoDraw(False)
        sjelly7.setAutoDraw(False)
        sjelly8.setAutoDraw(False)
        bucket5.setAutoDraw(False)
        ortext.setAutoDraw(False)
    KeyboardComponent choiceButton
      forceEndRoutine = True
      allowedKeys = 'v','b'
      startVal [time (s)] = 0.0
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  Routine Ins_choice
  Routine CompOutcome_pause
    ImageComponent cartoon_2
      stopVal [duration (s)] = 1
      pos = [-0.25, -.2]
      startVal [time (s)] = 0.0
      image = faces/cartoon.png
      size = [0.3, 0.5]
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    CodeComponent code_15
  Routine CompOutcome_i
    CodeComponent code_i5
      Begin Experiment:
        xcompHand=  -.25
        handw = .45
        handh = .92
      Begin Routine:
        ycompHand= -1.6
      End Routine:
        leftjelly_i5.setAutoDraw(True)
        rightjelly_i5.setAutoDraw(True)
      Each Frame:
        ycompHand= -1.6 + frameN/15
        if ycompHand> -.6:
            continueRoutine=False
    ImageComponent bucket_i5
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    ImageComponent cartoon_3
      pos = [-0.25, -0.2]
      startVal [time (s)] = 0.0
      image = faces/cartoon.png
      size = [0.3, 0.5]
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    ImageComponent compHandUp_2
      pos [set every frame] = [xcompHand,ycompHand]
      ori [set every frame] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $comphand
      size [set every repeat] = [handw, handh]
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    TextComponent ins_i5
      wrapWidth = 1
      color = black
      text [set every repeat] = 'Your partner looks at ' + $pronoun + ' sample from the bucket.\n\nYou can not see '+$pronoun +' sample \nand '+ $pronoun2 +' does not see yours.'
      pos = [.5, -.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent bucketText_i5
      color = black
      text = or
      pos [set every repeat] = [0, yBucket-.15]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent leftjelly_i5
      pos = [0.1, .5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $leftJellyv
      size = [0.2, 0.25]
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    ImageComponent rightjelly_i5
      pos = [-0.1, .5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $rightJellyv
      size = [0.2, 0.25]
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    TextComponent press_i5
      color = black
      text = press any key to continue
      pos = [0.5, -0.75]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    KeyboardComponent key_resp_i5
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine letterfeedback
    CodeComponent code_16
      Begin Routine:
        lr = letterResponse.keys

        hangman = ""
        if letPos == 0:
           hangman = "%s _ _ _ _" %lr
           posString = '1st'
        elif letPos == 1:
           hangman = "_ %s _ _ _" %lr
           posString = '2nd'
        elif letPos == 2:
           posString = '3rd'
           hangman = "_ _ %s _ _" %lr
        elif letPos == 3:
           posString = '4th'
           hangman = "_ _ _ %s_" %lr
        elif letPos == 4:
           posString = '5th'
           hangman = "_ _ _ _ %s" %lr

        msg = 'What was the %s letter?' %(posString)
      End Routine:
        social_urn_trials.addData('posString',posString)
        social_urn_trials.addData('correctLetter',correct)
        social_urn_trials.addData('letters',lettersc)
    TextComponent quest_2
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = .5
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent hangman_text_2
      color = black
      text [set every repeat] = $hangman
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine shake_i
    CodeComponent code_i2
      Begin Routine:
        orie = 0
      Each Frame:
        orie = random.randint(-5,5)
    ImageComponent bucket_i2
      pos [set every frame] = [xBucket,yBucket]
      ori [set every frame] = $orie
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent bucketText_i2
      color = black
      pos [set every repeat] = [0, yBucket]
      ori [set every frame] = $orie
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        demo
        bucket
    TextComponent ins2
      color = black
      text = ...and shakes so it is well mixed.
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent press_2
      color = black
      text = press key to continue
      pos = [0, -.75]
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine blank
    TextComponent all_done
      color = black
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        'all done!\n\n'

        'You labelled\n       ' + str($correctResponses) + '\nbuckets correctly.'
  Routine fixshaker
    CodeComponent code_2
      Begin Routine:
        orie = 0
      Each Frame:
        orie = random.randint(-5,5)
    ImageComponent bucket2
      stopVal [duration (s)] = 0.4
      pos [set every frame] = [xBucket,yBucket]
      ori [set every frame] = $orie
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent BucketText2
      color = black
      text [set every repeat] = $bucketName
      stopVal [duration (s)] = 0.4
      pos [set every frame] = [xBucket, yBucket]
      ori [set every frame] = $orie
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine binary
    KeyboardComponent next_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent blue_bucket
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      image = blue_bucket.png
      size = [0.6, 0.75]
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    ImageComponent red_bucket
      pos = [0.3, 0]
      startVal [time (s)] = 0.0
      image = red_bucket.png
      size = [0.6, 0.75]
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    TextComponent question
      color = black
      pos = [0, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Tell me which bucket it is most
                 likely to be.
    TextComponent red65
      color = red
      text = 65% red
      pos = [.3, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blue65
      color = blue
      text = 65% blue
      pos = [-.3, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent redjellyex
      pos = [.30, -.7]
      startVal [time (s)] = 0.0
      image = jb_red.png
      size [set every repeat] = [jwidth*2,jheight*2]
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    ImageComponent bluejellyex
      pos = [-.3,-.7]
      startVal [time (s)] = 0.0
      image = jb_blue.png
      size [set every repeat] = [jwidth*2,jheight*2]
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  Routine CompFace
    CodeComponent code_9
      Begin Experiment:
        conditionConf=""
        conditionUnconf=""
      Begin Routine:
        compHand.setAutoDraw(False)

        time_CompFace = stopwatch2.getTime()

        if confiComp==1:
            counterD[conditionConf] += 1
            if compplayer == 1:
               compFace = 'faces/04c.jpg'
            if compplayer == 2:
               compFace = 'faces/30c.jpg'
            if compplayer == 3:
               compFace = 'faces/11c.jpg'
            if compplayer == 4:
               compFace = 'faces/06c.jpg'

        if confiComp==0:
            counterD[conditionUnconf] += 1
            if compplayer == 1:
               compFace = 'faces/04uc.jpg'
            if compplayer == 2:
               compFace = 'faces/30uc.jpg'
            if compplayer == 3:
               compFace = 'faces/11uc.jpg'
            if compplayer == 4:
               compFace = 'faces/06uc.jpg'

        if compChoice==1:
            showCompChoice="red_choice_s.png"
        else:
            showCompChoice="blue_choice_s.png"
      End Routine:
        ComputerFace.setAutoDraw(True)
        CompBeanChoice.setAutoDraw(True)
        #compHandf.setAutoDraw(True)
    ImageComponent ComputerFace
      stopVal [duration (s)] = .05
      pos = [-0.25, -0.25]
      startVal [time (s)] = 0
      image [set every repeat] = $compFace
      size = [0.3, 0.5]
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    ImageComponent CompBeanChoice
      stopVal [duration (s)] = .05
      pos = [-0.25, -0.6]
      startVal [time (s)] = 0.0
      image [set every repeat] = $showCompChoice
      size = [0.2, 0.25]
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    ImageComponent compHandf
      stopVal [duration (s)] = .05
      pos [set every frame] = [xcompHand,ycompHand]
      startVal [time (s)] = 0.0
      image [set every repeat] = $comphand
      size [set every repeat] = [handw,handh]
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  Routine Ins_intro
    CodeComponent code_i0
      Begin Routine:
        if compplayer == 1:
           compFace = 'faces/04c.jpg'
        if compplayer == 2:
            compFace = 'faces/30c.jpg'
        if compplayer == 3:
           compFace = 'faces/11c.jpg'
        if compplayer == 4:
           compFace = 'faces/06c.jpg'
    TextComponent ins_0
      color = black
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Now let's go through what happens
        in each situation.
    TextComponent press_0
      color = black
      text = press key to continue
      pos = [0, -.75]
      startVal [time (s)] = 0.5
      letterHeight = 0.05
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    ImageComponent chosen_other
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $compFace
      size = [0.3, 0.5]
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    KeyboardComponent key_resp_0
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine i_compdec
    CodeComponent code_10
      Begin Experiment:
        conditionConf=""
        conditionUnconf=""
      Begin Routine:
        if confiComp==1:
            if compplayer == 1:
               compFace = 'faces/04c.jpg'
            if compplayer == 2:
               compFace = 'faces/30c.jpg'
            if compplayer == 3:
               compFace = 'faces/11c.jpg'
            if compplayer == 4:
               compFace = 'faces/06c.jpg'

        if confiComp==0:
            if compplayer == 1:
               compFace = 'faces/04uc.jpg'
            if compplayer == 2:
               compFace = 'faces/30uc.jpg'
            if compplayer == 3:
               compFace = 'faces/11uc.jpg'
            if compplayer == 4:
               compFace = 'faces/06uc.jpg'

        if compChoice==1:
            showCompChoice="jb_red.png"
        else:
            showCompChoice="jb_blue.png"
      End Routine:
        ComputerFace_2.setAutoDraw(True)
        compHand2_2.setAutoDraw(True)
        CompBeanChoice_2.setAutoDraw(True)
      Each Frame:
        if frameN > 30:
            ycompHand = -.6 - (frameN-30)/60
            if ycompHand < -.92:
                continueRoutine=False
    ImageComponent ComputerFace_2
      pos = [-0.25, -0.15]
      startVal [time (s)] = 0
      image [set every repeat] = $compFace
      size = [0.3, 0.6]
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    ImageComponent bucket_14
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket.png
      size = [0.6, 0.75]
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    ImageComponent CompBeanChoice_2
      pos = [-0.25, -0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $showCompChoice
      size [set every repeat] = [jwidth, jheight]
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    ImageComponent compHand2_2
      pos [set every frame] = [xcompHand,ycompHand]
      ori [set every frame] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $comphand
      size [set every repeat] = [handw, handh]
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  Routine Reach
    CodeComponent code5
      Begin Routine:
        time_Reach = stopwatch2.getTime()

        xcReach=-0.1
        yReach=1.2
        xsReach=0.1

        randomJelLoc=random.sample(set([1, 2]), 2)
        if randomJelLoc ==[1,2]:
            jellyLocCondition=1
            leftJellyv="jb_red.png"
            rightJellyv="jb_blue.png"
        else:
            jellyLocCondition=2
            leftJellyv="jb_blue.png"
            rightJellyv="jb_red.png"
      Each Frame:
        yReach = 1.2 - frameN/20
        if yReach < 0.8:
            continueRoutine=False
    ImageComponent ComputerReach
      pos [set every frame] = [xcReach,yReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $compreach
      size = [0.1*2, 0.5*2]
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    ImageComponent SubjectReach
      pos [set every frame] = [xsReach, yReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $sreach
      size = [0.1*2, 0.5*2]
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    ImageComponent bucket3
      pos [set every repeat] = [0,yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent BucketText3
      color = black
      text [set every repeat] = $bucketName
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Goodjob_ready
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent text_19
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You labeled it. Good job!

        Ready to play?

        Press the space bar to begin.
  Routine confident
    CodeComponent code_6
      Begin Routine:
        if compplayer == 1:
           confi = 'faces/04c.jpg'
        if compplayer == 2:
           confi = 'faces/30c.jpg'
        if compplayer == 3:
           confi = 'faces/11c.jpg'
        if compplayer == 4:
           confi = 'faces/06c.jpg'
        if compplayer == 1:
           unconfi = 'faces/04uc.jpg'
        if compplayer == 2:
           unconfi = 'faces/30uc.jpg'
        if compplayer == 3:
           unconfi = 'faces/11uc.jpg'
        if compplayer == 4:
           unconfi = 'faces/06uc.jpg'
    TextComponent confText
      wrapWidth = .5
      color = black
      text [set every repeat] = 'This is '+ $pronoun + ' confident face'
      pos = [-.3, .2]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent unconfText
      wrapWidth = .5
      color = black
      text [set every repeat] = 'This is '+ $pronoun + ' unconfident face'
      pos = [.3, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    ImageComponent conf
      pos = [-.3, -.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $confi
      size = [0.3, 0.5]
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    ImageComponent unconf
      pos = [.3, -.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $unconfi
      size = [0.3, 0.5]
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press_i1
      color = black
      text = press any key to continue
      pos = [0, -.9]
      startVal [time (s)] = 1
      letterHeight = 0.05
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  Routine initialise
    CodeComponent initialize_code
      Begin Experiment:
        import random
        import csv
        import collections
        import string
        leftJelly=""
        rightJelly=""
        stopwatch = core.Clock()
        counterD = collections.defaultdict(int)
        correctResponses = 0
        bucketNumber=0

        yBucket=1
        xBucket= 0
        wBucket=.4
        hBucket=.5
  Routine subFeedback_i
    ImageComponent bucket_21
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    ImageComponent LeftJellyS_i
      pos = [0, .5]
      startVal [condition] = keep==1
      image [set every repeat] = $leftJellyv
      size [set every repeat] = [.2, .25]
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    ImageComponent RightJellyS_i
      pos = [0, 0.5]
      startVal [condition] = keep==2
      image [set every repeat] = $rightJellyv
      size [set every repeat] = [.2, .25]
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    CodeComponent code_8
      End Routine:
        LeftJellyS_i.setAutoDraw(False)
        RightJellyS_i.setAutoDraw(False)
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent goodjob
      color = black
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        You labeled it.

        Now lets have six practice trials in real time.

        Choose as quickly and accurately as possible.


        Press any key.
  Routine SubOutcome_i
    CodeComponent code_i7
      Begin Experiment:
        from random import shuffle
        import math
        yadd = .065 # jellybean vertical distance
        xadd = .06 # jellybean horizontal distance
        xhand = .28 #subject hand x pos
        jwidth = .06
        jheight = .1
      Begin Routine:
        xReach=0.5
        yReach = -1.2

        # now set the jellys in the subject's hand
        jellycond = 4

        if jellycond == 0:
            jellylist=['jb_blue.png','jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 1:
            jellylist=['jb_red.png','jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 2:
            jellylist=['jb_red.png','jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 3:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 4:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 5:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 6:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 7:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png','jb_red.png', 'jb_blue.png']
        elif jellycond == 8:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png']

        shuffle(jellylist)
        jellyposxset = [.15, .25, .35, .15, .25, .35, .25, .35]
        jelly1 = jellylist.pop()
        jelly2 = jellylist.pop()
        jelly3 = jellylist.pop()
        jelly4 = jellylist.pop()
        jelly5 = jellylist.pop()
        jelly6 = jellylist.pop()
        jelly7 = jellylist.pop()
        jelly8 = jellylist.pop()
      End Routine:
        subHand_i7.setAutoDraw(True)
        sjelly1_2.setAutoDraw(True)
        sjelly2_2.setAutoDraw(True)
        sjelly3_2.setAutoDraw(True)
        sjelly4_2.setAutoDraw(True)
        sjelly5_2.setAutoDraw(True)
        sjelly6_2.setAutoDraw(True)
        sjelly7_2.setAutoDraw(True)
        sjelly8_2.setAutoDraw(True)
      Each Frame:
        if yReach < -0.6:
            yReach = -1.2 + frameN/20
    ImageComponent subHand_i7
      pos [set every frame] = [.25,yReach]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $shand
      size = [handw, handh]
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    ImageComponent bucket_19
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    ImageComponent sjelly1_2
      pos [set every frame] = [xhand-xadd, yReach]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly1
      size = [jwidth,jheight]
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    ImageComponent sjelly2_2
      pos [set every frame] = [xhand, yReach]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly2
      size = [jwidth, jheight]
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    ImageComponent sjelly3_2
      pos [set every frame] = [xhand+xadd, yReach]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly3
      size = [jwidth, jheight]
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    ImageComponent sjelly4_2
      pos [set every frame] = [xhand-xadd, yReach-yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly4
      size = [jwidth, jheight]
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    ImageComponent sjelly5_2
      pos [set every frame] = [xhand, yReach-yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly5
      size = [jwidth, jheight]
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    ImageComponent sjelly6_2
      pos [set every frame] = [xhand+xadd, yReach-yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly6
      size = [jwidth, jheight]
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    ImageComponent sjelly7_2
      pos [set every frame] = [xhand-xadd/2, yReach-yadd*2]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly7
      size = [jwidth, jheight]
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    ImageComponent sjelly8_2
      pos [set every frame] = [xhand+xadd/2, yReach-yadd*2]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly8
      size = [jwidth, jheight]
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    TextComponent ins_i7
      color = black
      pos = [.75, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Then you see
        your sample.
    TextComponent press_i7
      color = black
      text = press key to continue
      pos = [0.75, -.25]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine fix_i
    CodeComponent code_i1
      Begin Experiment:
        xBucket= 0
        wBucket=.4
        hBucket=.5
      Begin Routine:
        yBucket=1
      Each Frame:
        if yBucket>.5:
            yBucket=1-frameN/20
    ImageComponent bucket_i1
      pos [set every frame] = [xBucket,yBucket]
      startVal [time (s)] = 0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent bucketText_i1
      color = black
      pos [set every frame] = [0, yBucket]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        demo
        bucket
    TextComponent ins1
      color = black
      text = A new bucket arrives...
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent press_1
      color = black
      text = press key to continue
      pos = [0, -.75]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine thiscounts
    CodeComponent code_17
      Begin Experiment:
        n = 0
      Begin Routine:
        if n < 6:
            msgp = 'This is practice. \n\n\nPress any key to continue.'
        else:
            msgp = 'The next trials count! \n\nRespond as quickly and accurately as possible. \n\n\nPress any key to continue.'
    TextComponent text_4
      color = black
      text [set every repeat] = $msgp
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pickhand
    KeyboardComponent handButton
      forceEndRoutine = True
      allowedKeys = 'v','b'
      startVal [time (s)] = 0.0
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    ImageComponent darker
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      image = hands/shand_dark.png
      size = [0.52, 1]
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    ImageComponent lighter
      pos = [.3, 0]
      startVal [time (s)] = 0.0
      image = hands/shand_light.png
      size = [0.52, 1]
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    TextComponent Pick_hand
      color = black
      text = Pick your hand.
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent choice_player
      End Routine:
        if handButton.keys == 'v':
            splayer =1
            sgrab = 'hands/sgrab_darker.png'
            sreach = 'hands/sreach_darker.png'
            shand = 'hands/shand_dark.png'
        elif handButton.keys == 'b':
            splayer = 2
            sgrab = 'hands/sgrab_lighter.png'
            sreach = 'hands/sreach_lighter.png'
            shand = 'hands/shand_light.png'
    TextComponent text_3
      color = black
      text = V                         B
      pos = [0, -.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine SubChoose_i
    KeyboardComponent practiceButton
      forceEndRoutine = True
      allowedKeys = 'v','b'
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Begin Routine:
        responseJelly=""
        chosen=""

        subHand_i7.setAutoDraw(True)
        sjelly1_2.setAutoDraw(True)
        sjelly2_2.setAutoDraw(True)
        sjelly3_2.setAutoDraw(True)
        sjelly4_2.setAutoDraw(True)
        sjelly5_2.setAutoDraw(True)
        sjelly6_2.setAutoDraw(True)
        sjelly7_2.setAutoDraw(True)
        sjelly8_2.setAutoDraw(True)

        event.clearEvents(eventType= 'keyboard')
      End Routine:
        keys = event.getKeys(['v', 'b'])
        keep = 0

        #if jellyLocCondition==1:
        if  practiceButton.keys == 'b':
            keep = 1
            responseJelly="red"
            subChoice=1
            responseRT = stopwatch.getTime()
        if practiceButton.keys == 'v':
            keep = 2
            responseJelly="blue"
            responseRT = stopwatch.getTime()
            subChoice=0

        #else:
        #    if practiceButton.keys == 'v':
        #        keep = 1
        #        responseJelly="blue"
        #        chosen="left"
        #        responseRT = stopwatch.getTime()
        #        subChoice=0
        #    if practiceButton.keys == 'b':
        #        keep = 2
        #        responseJelly="red"
        #        responseRT = stopwatch.getTime()
        #        subChoice=1

        ComputerFace_i6.setAutoDraw(False)
        compHand_i6.setAutoDraw(False)
        CompBeanChoice_i6.setAutoDraw(False)

        subHand_i7.setAutoDraw(False)
        sjelly1_2.setAutoDraw(False)
        sjelly2_2.setAutoDraw(False)
        sjelly3_2.setAutoDraw(False)
        sjelly4_2.setAutoDraw(False)
        sjelly5_2.setAutoDraw(False)
        sjelly6_2.setAutoDraw(False)
        sjelly7_2.setAutoDraw(False)
        sjelly8_2.setAutoDraw(False)

        leftjelly_i5.setAutoDraw(False)
        rightjelly_i5.setAutoDraw(False)
    ImageComponent bucket_20
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent text_6
      wrapWidth = .75
      color = black
      pos = [0.65, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Based on ALL the useful information, choose what YOU think is in the bucket.

        press 'V' for LEFT label
        press 'B' for the RIGHT label.

        Watch out! The labels switch sides.

        Choose as quickly as you can.
  Routine fixation
    CodeComponent fixation_code
      Begin Routine:
        yBucket=1
        bucketNumber=bucketNumber+1
        if bucketNumber ==1:
            stopwatch2 = core.Clock()
            start = stopwatch2.getTime()
        time_fixation = stopwatch2.getTime()

        n = n + 1

        if n < 7:
            bucketName = 'Practice'
        else:
            bucketName = 'Bucket ' + str(n-6)
      Each Frame:
        yBucket=1-frameN/20
        if yBucket<.55:
            continueRoutine=False
    ImageComponent bucket
      pos [set every frame] = [xBucket,yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent BucketText1
      color = black
      text [set every repeat] = $bucketName
      pos [set every frame] = [xBucket, yBucket]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine reach_i
    CodeComponent code_i3
      Begin Routine:
        xcReach=-0.1
        yReach=1.2
        xsReach=0.1

        randomJelLoc=random.sample(set([1, 2]), 2)
        if randomJelLoc ==[1,2]:
            jellyLocCondition=1
            leftJellyv="red_choice_s.png"
            rightJellyv="blue_choice_s.png"
        else:
            jellyLocCondition=2
            leftJellyv="red_choice_s.png"
            rightJellyv="blue_choice_s.png"
      Each Frame:
        yReach=1.2-frameN/30
        if yReach < 0.8:
            continueRoutine=False
    ImageComponent ComputerReach_i
      pos [set every frame] = [xcReach,yReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $compreach
      size = [0.1*2, 0.5*2]
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    ImageComponent SubjectReach_i
      pos [set every frame] = [xsReach, yReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $sreach
      size = [0.1*2, 0.5*2]
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    ImageComponent bucket_i3
      pos [set every repeat] = [0,yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent ins_i3
      wrapWidth = 1.2
      color = black
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        You and your virtual partner take different samples from the bucket.

        Your samples contain different beans.
    TextComponent bucketText_i3
      color = black
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        demo
        bucket
  Routine letter_generator
    CodeComponent code_11
      Begin Experiment:
        from random import shuffle
      Begin Routine:
        #Generate a list
        #letter_list = ["a","b","c","d","e","f","g","h","i","j","k","l","m","n","o","p","q","r","s","t","u","v","w","x","y","z"]
        letter_list = ["b","c","d","f","g","h","j","k","l","m","n","p","q","r","s","t","v","w","x","z"]
        letters = ""

        if cogLoad == 1:
            shuffle(letter_list) #mix the list
            for x in range(0,5):
                letters = letters + " " + letter_list.pop()
        else: letters ='a b c d e'

        #else:
        #    x = random.randint(0,22)
        #    for y in range(x, x +5):
        #        letters = letters + " " + letter_list[y]
        #letters = letters.upper()
        lettersc = letters.replace(" ", "")
    TextComponent ranletters
      wrapWidth = 1.5
      color = black
      text [set every repeat] = $letters
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.2
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    TextComponent text
      color = black
      text = remember
      stopVal [duration (s)] = 2.5
      pos = [0, .4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine facerecog
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent imageLeft_2
      pos = [-0.25, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageFile1
      size = [.3,.6]
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    ImageComponent imageRight_2
      pos = [0.25, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageFile2
      size = [.3,.6]
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    CodeComponent code_5
      Begin Routine:
        mouse.getPos()
      End Routine:
        if (response == str(corrAns)):
          responseCorr = 1
        else:
          responseCorr=0

        trials.addData('response',response)
        trials.addData('responseCorr',responseCorr)
      Each Frame:
        if mouse.mouseMoved():
          if mouse.getPressed() and imageLeft.contains(mouse):
            response="left"
          if mouse.getPressed() and imageRight.contains(mouse):
            response="right"
    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = on click
  Routine SubOutcome
    CodeComponent code_12
      Begin Experiment:
        from random import shuffle
        import math
        yadd = .065 # jellybean vertical distance
        xadd = .06 # jellybean horizontal distance
        xhand = .28 #subject hand x pos
        jwidth = .06
        jheight = .1
      Begin Routine:
        xReach=0.5
        time_SubOutcome = stopwatch2.getTime()

        # now set the jellys in the subject's hand
        jellycond = redJelly

        if jellycond == 0:
            jellylist=['jb_blue.png','jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 1:
            jellylist=['jb_red.png','jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 2:
            jellylist=['jb_red.png','jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 3:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 4:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 5:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 6:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_blue.png', 'jb_blue.png']
        elif jellycond == 7:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png','jb_red.png', 'jb_blue.png']
        elif jellycond == 8:
            jellylist=['jb_red.png','jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png', 'jb_red.png']

        shuffle(jellylist)
        jellyposxset = [.15, .25, .35, .15, .25, .35, .25, .35]
        jelly1 = jellylist.pop()
        jelly2 = jellylist.pop()
        jelly3 = jellylist.pop()
        jelly4 = jellylist.pop()
        jelly5 = jellylist.pop()
        jelly6 = jellylist.pop()
        jelly7 = jellylist.pop()
        jelly8 = jellylist.pop()
      End Routine:
        subHand.setAutoDraw(True)
        sjelly1.setAutoDraw(True)
        sjelly2.setAutoDraw(True)
        sjelly3.setAutoDraw(True)
        sjelly4.setAutoDraw(True)
        sjelly5.setAutoDraw(True)
        sjelly6.setAutoDraw(True)
        sjelly7.setAutoDraw(True)
        sjelly8.setAutoDraw(True)
        compHand.setAutoDraw(False)
        comphandout.setAutoDraw(True)
      Each Frame:
        yReach=-1.2+frameN/15
        if yReach>-0.6:
            continueRoutine=False

        if ycompHand > -1:
            ycompHand = ycompHand - .1
    ImageComponent subHand
      pos [set every frame] = [.25,yReach]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $shand
      size = [handw, handh]
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    ImageComponent sjelly1
      pos [set every frame] = [xhand-xadd, yReach]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly1
      size = [jwidth,jheight]
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    ImageComponent sjelly2
      pos [set every frame] = [xhand, yReach]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly2
      size = [jwidth, jheight]
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    ImageComponent sjelly3
      pos [set every frame] = [xhand+xadd, yReach]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly3
      size = [jwidth, jheight]
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    ImageComponent sjelly4
      pos [set every frame] = [xhand-xadd, yReach-yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly4
      size = [jwidth, jheight]
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    ImageComponent sjelly5
      pos [set every frame] = [xhand, yReach-yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly5
      size = [jwidth, jheight]
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    ImageComponent sjelly6
      pos [set every frame] = [xhand+xadd, yReach-yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly6
      size = [jwidth, jheight]
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    ImageComponent sjelly7
      pos [set every frame] = [xhand-xadd/2, yReach-2*yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly7
      size = [jwidth, jheight]
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    ImageComponent sjelly8
      pos [set every frame] = [xhand+xadd/2, yReach-2*yadd]
      ori [set every repeat] = random.randint(-15,15)
      startVal [time (s)] = 0.0
      image [set every repeat] = $jelly8
      size = [jwidth, jheight]
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    ImageComponent comphandout
      pos [set every frame] = [xcompHand,ycompHand]
      startVal [time (s)] = 0.0
      image [set every repeat] = $comphand
      size = [handw,handh]
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  Routine letter_instruct
    TextComponent extrabit
      color = black
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.05
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      text:
        Extra Bit

        Before each trial you will be asked to remember a sequence of 5 letters.

        Such as: r s t l n e

        At the end of each trial you will be asked about one of those letters

        The first 12 buckets will be practice, then the real buckets will immediately begin.

        Choose as quickly and accurately as possible.

        Press any key to begin.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct1
    TextComponent instruct1
      wrapWidth = 1
      color = black
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      font = Helvetica
      letterHeight = 0.05
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      text:
        Part 1

        For the following pairs of faces, choose the face that appears to be the most confident.

        press 'V' for LEFT   press 'B' for RIGHT
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    TextComponent presskey1
      color = black
      text = press any key to start
      pos = [0, -.75]
      startVal [time (s)] = 1
      letterHeight = 0.05
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  Routine Grab
    CodeComponent code_3
      Each Frame:
        ycReach=0.8+frameN/30
        if ycReach>1.2:
            continueRoutine=False
    ImageComponent ComputerGrab
      pos [set every frame] = [xcReach,ycReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $compgrab
      size = [0.1*2, 0.5*2]
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    ImageComponent grab_subject
      pos [set every frame] = [xsReach, ycReach]
      startVal [time (s)] = 0.0
      image [set every repeat] = $sgrab
      size = [0.1*2, 0.5*2]
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    ImageComponent bucket4
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    TextComponent BucketText4
      color = black
      text [set every repeat] = $bucketName
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine social_urn_intro
    CodeComponent pt2_intro_code
      Begin Experiment:
        #defaults
        compplayer = 1
        confi = 'faces/04c.jpg'
        unconfi = 'faces/04uc.jpg'
        splayer =1
        sgrab = 'hands/sgrab_darker.png'
        sreach = 'hands/sreach_darker.png'
        shand = 'hands/shand_dark.png'
        comphand = 'hands/hand_04.png'
        compreach = 'hands/reach_04.png'
        compgrab = 'hands/grab_04.png'
        pronoun = 'his'
        pronoun2 = 'he'
      Begin Routine:
        xbucket = .4
        ybucket = 1.5
      End Routine:
        xbucket = 0
        ybucket = 1.2
      Each Frame:
        if ybucket>.5:
            ybucket=1-frameN/20
    ImageComponent computerface
      pos [set every frame] = [xbucket, .5]
      startVal [time (s)] = 0.0
      image = cartoon.png
      size = [0.6, 0.75]
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    TextComponent pt2_intro_txt
      wrapWidth = 1.5
      color = black
      pos = [-.3, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Part 2

        Welcome to the Jellybean Game!
        With help from your virtual friend,
        you are going to label buckets of
        jellybeans.

        Buckets are either: 65% red or 65% blue

        Your job is to label each bucket as mostly red or mostly blue.
    ImageComponent blue_bucket_intro
      pos = [.65, -.3]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.75]
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    ImageComponent redbucket_intro
      pos = [0.2, -.3]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [.6, 0.75]
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    TextComponent press
      color = black
      text = press any key to continue.
      pos = [0, -.8]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    ImageComponent labelred
      pos = [0.2, -.3]
      startVal [time (s)] = 0.0
      image = red_choice_s.png
      size = [0.2, 0.25]
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    ImageComponent labelblue
      pos = [0.65, -.3]
      startVal [time (s)] = 0.0
      image = blue_choice_s.png
      size = [0.2, 0.25]
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  Routine CompOutcome
    CodeComponent code_4
      Begin Experiment:
        xcompHand=  -.25
        handw = .45
        handh = .92
      Begin Routine:
        time_CompOutcome = stopwatch2.getTime()

        ycompHand= -1.6

        randomJelLoc=random.sample(set([1, 2]), 2)
        if randomJelLoc ==[1,2]:
            jellyLocCondition=1
            leftJellyv="red_choice_s.png"
            rightJellyv="blue_choice_s.png"
        else:
            jellyLocCondition=2
            leftJellyv="blue_choice_s.png"
            rightJellyv="red_choice_s.png"
      End Routine:
        ycompHand= -0.6
        bucket5.setAutoDraw(True)
        leftJelly.setAutoDraw(True)
        rightJelly.setAutoDraw(True)
        compHand.setAutoDraw(True)
        ortext.setAutoDraw(True)
      Each Frame:
        ycompHand= -1.6 + frameN/15
        if ycompHand> -.6:
            continueRoutine=False
    ImageComponent bucket5
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    ImageComponent cartoon
      pos = [-0.25, -0.2]
      startVal [time (s)] = 0.0
      image = faces/cartoon.png
      size = [0.3, 0.5]
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    ImageComponent compHand
      pos [set every frame] = [xcompHand,ycompHand]
      ori [set every frame] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $comphand
      size [set every repeat] = [handw, handh]
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    ImageComponent leftJelly
      pos = [-0.1, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $leftJellyv
      size = [0.2, 0.25]
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    ImageComponent rightJelly
      pos = [.1, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $rightJellyv
      size = [0.2, 0.25]
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    TextComponent ortext
      color = black
      text = or
      pos [set every repeat] = [0, yBucket-.15]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ITI
    TextComponent text_2
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine chooseWisely
  Routine letter_probe
    CodeComponent code_14
      Begin Routine:
        letPos = random.randint(0,4)
        correct = lettersc[letPos]
        strpos = str(letPos + 1)

        hangman = ""
        if letPos == 0:
           hangman = "* _ _ _ _"
           posString = '1st'
        elif letPos == 1:
           hangman = "_ * _ _ _"
           posString = '2nd'
        elif letPos == 2:
           posString = '3rd'
           hangman = "_ _ * _ _"
        elif letPos == 3:
           posString = '4th'
           hangman = "_ _ _ * _"
        elif letPos == 4:
           posString = '5th'
           hangman = "_ _ _ _ *"

        msg = 'What was the %s letter?' %(posString)
      End Routine:
        social_urn_trials.addData('posString',posString)
        social_urn_trials.addData('correctLetter',correct)
        social_urn_trials.addData('letters',lettersc)
    KeyboardComponent letterResponse
      correctAns = $correct
      storeCorrect = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent quest
      color = black
      text [set every repeat] = $msg
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent hangman_text
      color = black
      text [set every repeat] = $hangman
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine trial
    KeyboardComponent faceButton
      forceEndRoutine = True
      allowedKeys = 'v','b'
      startVal [time (s)] = 0
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent imageLeft
      pos = [-0.25, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageFile1
      size = [.3,.5]
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    ImageComponent imageRight
      pos = [0.25, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageFile2
      size = [.3,.5]
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    CodeComponent code
      Begin Routine:
        event.clearEvents(eventType= 'keyboard')

        keep = 0
        response = ""
        confFacesRT=0
      End Routine:
        #keys = event.getKeys(['b', 'n'])
        #print keys

        if faceButton.keys == 'n':
            response="right"
            confFacesRT=t
        if faceButton.keys == 'b':
            response="left"
            confFacesRT=t

        if (response == str(corrAns)):
          responseCorr = 1
        else:
          responseCorr = 0

        face_recog.addData('response',response)
        face_recog.addData('responseCorr',responseCorr)
        face_recog.addData('confFacesRT',confFacesRT)
  Routine pickplayer
    KeyboardComponent playerButton
      forceEndRoutine = True
      allowedKeys = 'v','b','n','m'
      startVal [time (s)] = 0.0
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    CodeComponent Get_choice_player
      Begin Routine:
        compplayer = 0
      End Routine:
        if playerButton.keys == 'v':
            compplayer = 1
            comphand = 'hands/hand_04.png'
            compreach = 'hands/reach_04.png'
            compgrab = 'hands/grab_04.png'
            pronoun = 'his'
            pronoun2 = 'he'
        elif playerButton.keys == 'b':
            compplayer = 2
            comphand = 'hands/hand_19.png'
            compreach = 'hands/reach_19.png'
            compgrab = 'hands/grab_19.png'
            pronoun = 'his'
            pronoun2 = 'he'
        elif playerButton.keys == 'n':
            compplayer = 3
            comphand= 'hands/hand_11.png'
            compreach = 'hands/reach_11.png'
            compgrab = 'hands/grab_11.png'
            pronoun = 'her'
            pronoun2 = 'she'
        elif playerButton.keys == 'm':
            compplayer = 4
            comphand = 'hands/hand_06.png'
            compreach = 'hands/reach_06.png'
            compgrab = 'hands/grab_06.png'
            pronoun = 'her'
            pronoun2 = 'she'
    ImageComponent player1
      pos = [-.45, 0.5]
      startVal [time (s)] = 0.0
      image = faces/04c.jpg
      size = [0.3, 0.5]
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    ImageComponent player2
      pos = [-.15, 0.5]
      startVal [time (s)] = 0.0
      image = faces/30c.jpg
      size = [0.3, 0.5]
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    ImageComponent player3
      pos = [0.15, 0.5]
      startVal [time (s)] = 0.0
      image = faces/11c.jpg
      size = [0.3, 0.5]
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    ImageComponent player4
      pos = [.45, 0.5]
      startVal [time (s)] = 0.0
      image = faces/06c.jpg
      size = [0.3, 0.5]
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    ImageComponent hand1
      pos = [-.45, -.5]
      startVal [time (s)] = 0.0
      image = hands/hand_04.png
      size = [0.3, 0.5]
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    ImageComponent hand2
      pos = [-.15, -.5]
      startVal [time (s)] = 0.0
      image = hands/hand_19.png
      size = [0.3, 0.5]
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    ImageComponent hand3
      pos = [0.15, -.5]
      startVal [time (s)] = 0.0
      image = hands/hand_11.png
      size = [0.3, 0.5]
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    ImageComponent hand4
      pos = [0.45, -.5]
      startVal [time (s)] = 0.0
      image = hands/hand_06.png
      size = [0.3, 0.5]
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    TextComponent Pick
      wrapWidth = 100
      color = black
      text = Pick your virtual partner for the jellybean game.
      pos = [0, 0.83]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent player1uc
      pos = [-.45, 0]
      startVal [time (s)] = 0.0
      image = faces/04uc.jpg
      size = [0.3, 0.5]
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    ImageComponent player2uc
      pos = [-.15, 0]
      startVal [time (s)] = 0.0
      image = faces/30uc.jpg
      size = [0.3, 0.5]
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    ImageComponent player3uc
      pos = [.15,0]
      startVal [time (s)] = 0.0
      image = faces/11uc.jpg
      size = [0.3, 0.5]
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    ImageComponent player4uc
      pos = [.45, 0]
      startVal [time (s)] = 0.0
      image = faces/06uc.jpg
      size = [0.3, 0.5]
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    TextComponent choose
      wrapWidth = 1.5
      color = black
      text =   V           B           N           M
      pos = [0, -.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine subFeedback
    ImageComponent bucket6
      stopVal [duration (s)] = 1
      pos [set every repeat] = [0, yBucket]
      startVal [time (s)] = 0.0
      image = bucket_bare.png
      size = [0.6, 0.7]
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    ImageComponent LeftJellyS_3
      stopVal [duration (s)] = 1
      pos = [-.1, .5]
      startVal [condition] = keep==1
      image [set every repeat] = $leftJellyv
      size [set every repeat] = [0.2, 0.25]
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    ImageComponent RightJellyS_3
      stopVal [duration (s)] = 1
      pos = [0.1, 0.5]
      startVal [condition] = keep==2
      image [set every repeat] = $rightJellyv
      size [set every repeat] = [0.2, 0.25]
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    CodeComponent code_7
      Begin Routine:
        time_subFeedback = stopwatch2.getTime()
      End Routine:
        social_urn_trials.addData('responseJelly',responseJelly)
        social_urn_trials.addData('responseRT',responseRT)
        social_urn_trials.addData('subChoice',subChoice)
        social_urn_trials.addData('tfix', time_fixation)
        social_urn_trials.addData('treach', time_Reach)
        social_urn_trials.addData('tCompOut', time_CompOutcome)
        social_urn_trials.addData('tCompFace', time_CompFace)
        social_urn_trials.addData('tSubOut', time_SubOutcome)
        social_urn_trials.addData('tSubChoose', time_SubChoose)
        social_urn_trials.addData('tsubFeed', time_subFeedback)
        social_urn_trials.addData('randomJelLoc', time_subFeedback)
      Each Frame:
        if stopwatch2.getTime() > time_subFeedback +1:
            continueRoutine=False
Flow
  Routine initialise
  Routine Instruct1
  LoopInitiator face_recog loopType="TrialHandler"
    conditionsFile = filelists/conf_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'imageFile1': u'faces/01c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/01uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/02c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/02uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/03c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/03uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/04c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/04uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/05c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/05uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/06c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/06uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/07c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/07uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/08c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/08uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/09c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/09uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/10c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/10uc.jpg', u'corrAns': u'left'},
      {u'imageFile1': u'faces/11c.jpg', u'confidence2': 0, u'confidence1': 1, u'imageFile2': u'faces/11uc.jpg', u'corrAns': u'left'}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
    Routine trial
  LoopTerminator face_recog
  LoopInitiator pickother loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine social_urn_intro
    Routine pickplayer
    Routine confident
    Routine pickhand
  LoopTerminator pickother
  LoopInitiator instructions loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Ins_intro
    Routine fix_i
    Routine shake_i
    Routine reach_i
    Routine grab_i
    Routine CompOutcome_i
    Routine compface_i
    Routine SubOutcome_i
    Routine SubChoose_i
    Routine subFeedback_i
  LoopTerminator instructions
  LoopInitiator social_urn_loop loopType="TrialHandler"
    conditionsFile = filelists\loop_big.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'conditionFile': u'filelists/trial_conditions_first6.xlsx'},
      {u'conditionFile': u'filelists/trial_conditions_part1.xlsx'},
      {u'conditionFile': u'filelists/trial_conditions_part2.xlsx'}]
    Routine thiscounts
    LoopInitiator social_urn_trials loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = random
      nReps = 1
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      Routine fixation
      Routine fixshaker
      Routine Reach
      Routine Grab
      Routine CompOutcome
      Routine CompOutcome_pause
      Routine CompFace
      Routine SubOutcome
      Routine SubChoose
      Routine subFeedback
      Routine ITI
    LoopTerminator social_urn_trials
  LoopTerminator social_urn_loop
  Routine blank
